PsychoPy2experiment version="2026.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(-1.0000, -1.0000, -1.0000)
  expName = gonogo_task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instrucciones_practica
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    TextComponent instrucciones_practica_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        PRÁCTICA

        Recuerda:

        Círculo verde  →  Presiona la barra espaciadora

        Cuadrado rojo  →  No presiones ninguna tecla

        Recibirás retroalimentación después de cada ensayo.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine estimulo_practica
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    ImageComponent estimulo_p
      image [set every repeat] = $imagen_p
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_practice
      allowedKeys = 'space'
      correctAns = $tecla_correcta_p
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine feedback_practica
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        mensaje_feedback = ""
        if key_resp_practice.corr == 1:
            mensaje_feedback = "¡Correcto!"
        else:
            mensaje_feedback = "Incorrecto"
    TextComponent feedback_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $mensaje_feedback
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  Routine fin_practica
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    TextComponent fin_practica_txt
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        La práctica ha terminado.

        Ahora tendrás un descanso.

        Después comenzarás la fase experimental, sin retroalimentación.
  Routine descanso
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    TextComponent descanso_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        DESCANSO

        La tarea continuará automáticamente.
  Routine instrucciones_experimental
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    TextComponent instrucciones_experimental_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        BLOQUE EXPERIMENTAL

        Recuerda:

        Círculo verde  →  Presiona la barra espaciadora

        Cuadrado rojo  →  No presiones ninguna tecla

        Responde lo más rápido y con la mayor precisión posible.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine estimulo_experimental
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    ImageComponent estimulo
      image [set every repeat] = $imagen
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_experimental
      allowedKeys = 'space'
      correctAns = $tecla_correcta
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine ITI
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    TextComponent txt_ITI
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine fin_experimento
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    TextComponent fin_experimento_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        La tarea ha finalizado.

        Gracias por tu participación.
  Routine instrucciones
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    TextComponent instrucciones_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bienvenido/a a esta tarea.

        En cada ensayo verás aparecer una figura en el centro de la pantalla.

        Círculo verde  →  Presiona la barra espaciadora lo más rápido posible

        Cuadrado rojo  →  No presiones ninguna tecla

        Primero realizarás una fase de práctica.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instrucciones
  Routine instrucciones_practica
  LoopInitiator loop_practica loopType="TrialHandler"
    conditionsFile = conditions/condiciones_practica.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'id_p': 1, 'imagen_p': 'media/stim/nogo.png', 'tecla_correcta_p': 'none', 'es_go_p': 0, 'tipo_p': 'nogo'},
      {'id_p': 2, 'imagen_p': 'media/stim/go.png', 'tecla_correcta_p': 'space', 'es_go_p': 1, 'tipo_p': 'go'},
      {'id_p': 3, 'imagen_p': 'media/stim/go.png', 'tecla_correcta_p': 'space', 'es_go_p': 1, 'tipo_p': 'go'},
      {'id_p': 4, 'imagen_p': 'media/stim/go.png', 'tecla_correcta_p': 'space', 'es_go_p': 1, 'tipo_p': 'go'},
      {'id_p': 5, 'imagen_p': 'media/stim/go.png', 'tecla_correcta_p': 'space', 'es_go_p': 1, 'tipo_p': 'go'},
      {'id_p': 6, 'imagen_p': 'media/stim/go.png', 'tecla_correcta_p': 'space', 'es_go_p': 1, 'tipo_p': 'go'},
      {'id_p': 7, 'imagen_p': 'media/stim/go.png', 'tecla_correcta_p': 'space', 'es_go_p': 1, 'tipo_p': 'go'},
      {'id_p': 8, 'imagen_p': 'media/stim/nogo.png', 'tecla_correcta_p': 'none', 'es_go_p': 0, 'tipo_p': 'nogo'},
      {'id_p': 9, 'imagen_p': 'media/stim/go.png', 'tecla_correcta_p': 'space', 'es_go_p': 1, 'tipo_p': 'go'},
      {'id_p': 10, 'imagen_p': 'media/stim/go.png', 'tecla_correcta_p': 'space', 'es_go_p': 1, 'tipo_p': 'go'},
      {'id_p': 11, 'imagen_p': 'media/stim/nogo.png', 'tecla_correcta_p': 'none', 'es_go_p': 0, 'tipo_p': 'nogo'},
      {'id_p': 12, 'imagen_p': 'media/stim/go.png', 'tecla_correcta_p': 'space', 'es_go_p': 1, 'tipo_p': 'go'},
      {'id_p': 13, 'imagen_p': 'media/stim/go.png', 'tecla_correcta_p': 'space', 'es_go_p': 1, 'tipo_p': 'go'},
      {'id_p': 14, 'imagen_p': 'media/stim/go.png', 'tecla_correcta_p': 'space', 'es_go_p': 1, 'tipo_p': 'go'}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
    Routine estimulo_practica
    Routine feedback_practica
  LoopTerminator loop_practica
  Routine fin_practica
  Routine descanso
  Routine instrucciones_experimental
  LoopInitiator loop_experimental loopType="TrialHandler"
    conditionsFile = conditions/condiciones_experimental.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'id': 1, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'},
      {'id': 2, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'},
      {'id': 3, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'},
      {'id': 4, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'},
      {'id': 5, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'},
      {'id': 6, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'},
      {'id': 7, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'},
      {'id': 8, 'imagen': 'media/stim/nogo.png', 'tecla_correcta': 'none', 'es_go': 0, 'tipo': 'nogo'},
      {'id': 9, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'},
      {'id': 10, 'imagen': 'media/stim/nogo.png', 'tecla_correcta': 'none', 'es_go': 0, 'tipo': 'nogo'},
      {'id': 11, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'},
      {'id': 12, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'},
      {'id': 13, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'},
      {'id': 14, 'imagen': 'media/stim/nogo.png', 'tecla_correcta': 'none', 'es_go': 0, 'tipo': 'nogo'},
      {'id': 15, 'imagen': 'media/stim/go.png', 'tecla_correcta': 'space', 'es_go': 1, 'tipo': 'go'}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
    Routine estimulo_experimental
    Routine ITI
  LoopTerminator loop_experimental
  Routine fin_experimento
